PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 864]
  expName = orientation task
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5: #50:50 probability
            direction = -level
            corr_resp = 'left'
        else:
            direction = level
            corr_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', corr_resp)
        thisExp.addData('tilt' , direction)
        thisExp.addData('key_resp.corr' , key_resp.corr)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      mask = circular
      ori [set every repeat] = direction
      sf = 9
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'down','up'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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Flow
  LoopInitiator stair loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 101
    start value = 10
    step sizes = [5,4,3,2]
    step type = log
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    Routine trial
  LoopTerminator stair
